CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:404
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "365")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:Iba1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "561")
    Name to assign these images:Cy3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "640")
    Name to assign these images:Cy5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "730")
    Name to assign these images:Cy7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:DAPI
    Typical diameter of objects, in pixel units (Min,Max):28,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:Iba1
    Name the output image:EnhanceIba1
    Select the operation:Enhance
    Feature size:50
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:No

MakeProjection:[module_num:7|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
    Select the input image:EnhanceIba1
    Type of projection:Minimum
    Name the output image:ProjectionIba1
    Frequency:6.0

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:ProjectionIba1
    Name the primary objects to be identified:IBA1
    Typical diameter of objects, in pixel units (Min,Max):10,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
SplitOrMergeObjects:[module_num:9|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
    Select the input objects:IBA1
    Name the new objects:Iba1merged
    Operation:Merge
    Maximum distance within which to merge objects:16
    Merge using a grayscale image?:No
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    Merging method:Distance
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:Iba1
    Name the output image:Iba1Tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Iba1merged
    Name the objects to be identified:IBA1mergedwithtubeness
    Select the method to identify the secondary objects:Propagation
    Select the input image:Iba1Tubeness
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

SplitOrMergeObjects:[module_num:12|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
    Select the input objects:IBA1mergedwithtubeness
    Name the new objects:IBA1_final
    Operation:Merge
    Maximum distance within which to merge objects:14
    Merge using a grayscale image?:No
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    Merging method:Distance
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
RelateObjects:[module_num:13|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
    Parent objects:DAPI
    Child objects:IBA1_final
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Iba1_DAPI
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
Threshold:[module_num:14|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
    Select the input image:Iba1Tubeness
    Name the output image:Thresholdtubeness
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSkeleton:[module_num:15|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
    Select the seed objects:DAPI
    Select the skeletonized image:Thresholdtubeness
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:No
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Iba1_DAPI
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:Cy5
    Name the output image:EnhanceCy5
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:EnhanceCy5
    Name the primary objects to be identified:Cy5_F
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0018,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

MaskObjects:[module_num:19|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
    Select objects to be masked:Cy5_F
    Name the masked objects:Maskedred_Cy5
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Iba1_DAPI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:20|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
    Parent objects:Iba1_DAPI
    Child objects:Cy5_F
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Iba1_Dapi_Cy5
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
EnhanceOrSuppressFeatures:[module_num:21|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
    Select the input image:Cy7
    Name the output image:EnhanceCy7
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:EnhanceCy7
    Name the primary objects to be identified:Cy7_F
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0018,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

MaskObjects:[module_num:23|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
    Select objects to be masked:Cy7_F
    Name the masked objects:Maskedred_Cy7
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Iba1_DAPI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:24|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
    Parent objects:Iba1_DAPI
    Child objects:Cy7_F
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Iba1_Dapi_Cy7
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
EnhanceOrSuppressFeatures:[module_num:25|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
    Select the input image:Cy3
    Name the output image:EnhanceCy3
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:26|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
    Select the input image:Cy3
    Name the primary objects to be identified:Cy3_F
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0018,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

MaskObjects:[module_num:27|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
    Select objects to be masked:Cy3_F
    Name the masked objects:Maskedred_Cy3
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Iba1_DAPI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:28|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
    Parent objects:Iba1_DAPI
    Child objects:Cy3_F
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Iba1_Dapi_Cy3
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
MeasureObjectIntensity:[module_num:29|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
    Select images to measure:Cy3, Iba1
    Select objects to measure:Iba1_Dapi_Cy3

MeasureObjectIntensity:[module_num:30|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
    Select images to measure:Cy7
    Select objects to measure:Iba1_Dapi_Cy7

MeasureObjectIntensity:[module_num:31|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
    Select images to measure:Cy5
    Select objects to measure:Iba1_Dapi_Cy5

MeasureObjectIntensity:[module_num:32|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
    Select images to measure:Iba1
    Select objects to measure:Iba1_DAPI

ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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